PsychoPy2experiment version="2024.1.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'],expName, expInfo['date'])
  Experiment info = {'participant': '', '年级': '', '班级': '', '性别': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1440, 900]
  color = 0.0000, 0.0000, 0.0000
  expName = N-BACK_primary
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine InsFrame
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    CodeComponent code_condition
      Code Type = Auto->JS
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      Before Experiment:
        import random

        # 变量定义
        n_values = [2, 2, 1]
        i = 1
        image_lists = [
            ['01.png', '02.png', '03.png', '04.png', '05.png', '06.png', '07.png', '08.png', '09.png', '10.png', '11.png', '12.png', '13.png', '14.png', '15.png', '16.png', '17.png', '18.png'],
            ["01.png", "02.png", "03.png", "04.png", "05.png", "06.png", "07.png", "08.png", "09.png"]
        ]
        fixation_lists = [
            ['up.png', 'down.png', 'left.png', 'right.png', 'center.png', 'lu.png', 'ru.png', 'ld.png', 'rd.png'],
            ['center.png']
        ]

        # 生成所有条件的列表
        conditions = []
        for n in n_values:
            for image_list in image_lists:
                for fixation_list in fixation_lists:
                    conditions.append((i, n, image_list, fixation_list))
                    i = i + 1
        print(conditions)
    TextComponent text
      disabled = True
      letterHeight = 25
      startVal [time (s)] = 0.0
      text = Welcome to N-back!
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent ins_start
      image = ins700x350.png
      saveStartStop = False
      size = (700, 350)
      startVal [time (s)] = 0.0
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  Routine feedback
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    ImageComponent image_bac_2
      image = background_grey.png
      size = (500, 500)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ''
        msgcolor = ''
        ntext = ''
        ncolor=''
      Begin Routine:
        shuffle(fixation_list)
        fiximg = fixation_list[0]


        #监听按键信息并给出反馈
        if key_resp_2.corr:
            response = True
            msg = '答对了!'
            msgcolor = 'green'

        else :
            response = False
            msg = '答错了!'
            msgcolor = 'red'
    TextComponent msg_response
      color [set every repeat] = $msgcolor
      font = simsong
      letterHeight = 30
      pos = (0, 275)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $msg
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    ImageComponent fixation_img
      image [set every repeat] = $fiximg
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine thanks
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    TextComponent text_3
      font = simsong
      letterHeight = 35
      startVal [time (s)] = 0.0
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      text:
        感谢你参加我们的实验！
        现在你可以挑选一个自己的礼品了！
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prepare
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    CodeComponent anslist_code
      Code Type = Auto->JS
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      Begin Routine:
        # set environment
        numcount = 1
        num_i = 0
        piccenpos_cr = [166, 0, -166]
        piccenpos_ar = [166, 0, -166]

        # select condition
        condition = conditions.pop()
        i, n, image_list, fixation_list = condition
        num_i = i

        # add condition details to data document
        condi = {
            'i=': i,
            'n=': n,
            'len=': len(image_list),
            'fix=': len(fixation_list)
        }
        thisExp.addData('condition', condi)
        print('第',i,'组','N值', n, '图表长度', len(image_list), '注视点表长度', len(fixation_list))

        # analyze the image list
        pre_img = []
        rom_imgs = image_list.copy()
        for _ in range(n):
            temp = random.choice(rom_imgs)
            pre_img.append(temp)
            rom_imgs.remove(temp)

        # 生成匹配刺激列表 match_list
        match_list = []
        ram = range(9 * n)
        for _ in ram:
            match_image = random.choice(image_list)
            match_list.append([match_image, match_image])
        for item in match_list:
            temp = image_list.copy()
            n1 = n
            while n1 > 1:
                temp.remove(item[n - n1])
                item.insert(n - n1 + 1, random.choice(temp))
                n1 -= 1

        # 生成刺激列表 stim_list
        stim_list_pre = match_list.copy()  # 复制匹配刺激列表作为基础
        remaining = 45 - len(match_list) * (n + 1)  # 剩余待插入元素的数量
        while remaining > 0:
            new_image = random.choice(image_list)
            index = random.randint(0, len(stim_list_pre))  # 随机选择插入位置
            if index < n:
                stim_list_pre.insert(index, [new_image])  # 在选择的位置插入新元素
                remaining -= 1
            elif index < len(stim_list_pre):
                prev_image = stim_list_pre[index - n][0]
                next_image = stim_list_pre[index][0]

                if new_image != prev_image and new_image != next_image:
                    stim_list_pre.insert(index, [new_image])  # 在选择的位置插入新元素
                    remaining -= 1
            else:
                if new_image != stim_list_pre[index - n][0]:
                    stim_list_pre.insert(index, [new_image])
                    remaining -= 1

        stim_list = []
        # 迭代遍历原始刺激列表拆包
        for stim in stim_list_pre:
            if len(stim) > 1:  # 成对的元素
                for s in stim:
                    stim_list.append(s)
            else:  # 单个元素
                stim_list.append(stim[0])

        # 计算转换后列表中的元素数量
        num_elements = len(stim_list)

        # 复制 stim_list 生成 answer_list
        answer_list = []

        if n == 1:
            preimg_list=['01.png']
        else:
            preimg_list=['01.png','02.png']

        allimg_list = preimg_list + stim_list
        #anscount = 0
        for i in range(n, len(allimg_list)):
            if allimg_list[i] == allimg_list[i - n]:
                answer_list.append('f')
                #anscount += 1
            else:
                answer_list.append('j')

        if n == 1:
            ncolor = 'yellow'
            ntext = '-1-'
        else :
            ncolor = 'purple'
            ntext = '-2-'

        #print("before experiment stim_list:", stim_list)
        #print("before experiment answer_list:",answer_list)
    TextComponent rest_ins_text
      disabled = True
      letterHeight = 30
      pos = (0, 100)
      startVal [time (s)] = 0.0
      text = press space to continue
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent ins_1back
      image = ins_1-back_700x350.png
      size = (700, 350)
      startVal [condition] = $n ==1
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    ImageComponent ins_2back
      image = ins_2-back_700x350.png
      size = (700, 350)
      startVal [condition] = $n ==2
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    ImageComponent pic_01png_2
      image [set every repeat] = 01.png
      pos = (-100, 0)
      size = (70, 70)
      startVal [time (s)] = 0
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    ImageComponent pic_02png_2
      image [set every repeat] = 02.png
      pos = (100, 0)
      size = (70, 70)
      startVal [condition] = $n == 2
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  Routine Stim
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    ImageComponent image_bac
      image = background_grey.png
      size = (500, 500)
      startVal [time (s)] = 0.0
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    CodeComponent code_exe
      Code Type = Auto->JS
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      Begin Routine:
        this_number = numcount
        this_image = stim_list[numcount-1]
        duration = 0.5
        if num_i == 10:
            duration = 0.3
        if num_i == 9:
            duration = 0.3
        if num_i == 2:
            duration = 0.3
        if num_i == 1:
            duration = 0.3
        if num_i == 4:
            duration = 0.3
        if num_i == 3:
            duration = 0.3
        response = ''
        #the central position of picture
        shuffle(piccenpos_cr)
        shuffle(piccenpos_ar)
        piccenpos = (piccenpos_cr[0], piccenpos_ar[0])

        ans = answer_list[numcount-1]
        thisExp.addData('ans', ans)
        print("begin routine ","count",numcount,"img",this_image,"ans",ans)

        if key_resp_2.corr:
            response = True

        else :
            response = False
      End Routine:
        numcount += 1
    TextComponent n_value
      color [set every repeat] = $ncolor
      languageStyle = Arabic
      letterHeight = 20
      pos = (0, 275)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ntext
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    TextComponent num
      letterHeight = 20
      pos = (-45, 275)
      saveStartStop = False
      startVal [time (s)] = 0
      text = No.
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    TextComponent testnum
      letterHeight = 20
      pos = (-20, 275)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $this_number
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    ImageComponent thisimage
      color = 1.0000, 1.0000, 1.0000
      image [set every frame] = $this_image
      pos [set every repeat] = $piccenpos
      saveStartStop = False
      size = (60, 60)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $duration
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      correctAns = $ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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    SoundComponent sound_true
      saveStartStop = False
      sound [set every repeat] = A
      startVal [condition] = $response==True
      stopVal [duration (s)] = 0.1
      volume = 2
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    SoundComponent sound_false
      hamming = False
      saveStartStop = False
      sound [set every repeat] = B
      startVal [condition] = $response==False
      stopVal [duration (s)] = 0.2
      volume [set every repeat] = 4
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Flow
  Routine InsFrame
  Routine prepare
  LoopInitiator condition12 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine Stim
    Routine feedback
  LoopTerminator condition12
  Routine prepare
  LoopInitiator condition11 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine Stim
    Routine feedback
  LoopTerminator condition11
  Routine prepare
  LoopInitiator condition10 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine Stim
    Routine feedback
  LoopTerminator condition10
  Routine prepare
  LoopInitiator condition9 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine Stim
    Routine feedback
  LoopTerminator condition9
  Routine prepare
  LoopInitiator condition8 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine Stim
    Routine feedback
  LoopTerminator condition8
  Routine prepare
  LoopInitiator condition7 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine Stim
    Routine feedback
  LoopTerminator condition7
  Routine prepare
  LoopInitiator condition6 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine Stim
    Routine feedback
  LoopTerminator condition6
  Routine prepare
  LoopInitiator condition5 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine Stim
    Routine feedback
  LoopTerminator condition5
  Routine prepare
  LoopInitiator condition4 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine Stim
    Routine feedback
  LoopTerminator condition4
  Routine prepare
  LoopInitiator condition3 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine Stim
    Routine feedback
  LoopTerminator condition3
  Routine prepare
  LoopInitiator condition2 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine Stim
    Routine feedback
  LoopTerminator condition2
  Routine prepare
  LoopInitiator condition1 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine Stim
    Routine feedback
  LoopTerminator condition1
